OpenViBE-Scenario
Comment
  Spectrogram

EEG generator => #0
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/scripts/eeg_generator.py
  Number of channels = 19
  Samples per epoch = 32
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Hamming
  Window method = Hamming
-> Spectral analysis (FFT) => #3
  Spectral components = Amplitude
#3.Amplitude -> Epoch average
  Averaging type = Cumulative average
  Epoch count = 4
-> Channel spectra
  Minimum frequency to display = 0
  Maximum frequency to display = 128
Data=#0 -> Signal display "Artificial EEG"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
