OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.0)
Comment
  (You can add comments by pressing the C key)
Comment
  Artificial EEG+ERP generation with Python boxes
Comment
  Spectrogram
Comment
  Calculation of average signal for Target / Non-Target

Target/Non-target stimulator => #0
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/scripts/random_stimulator.py
  Target stimulation label = OVTK_StimulationId_Target
  Non-Target stimulation label = OVTK_StimulationId_NonTarget
  Target probability = 0.25
-> Identity => #1
EEG generator => #2
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/scripts/eeg_generator.py
  Number of channels = 19
  Samples per epoch = 32
EEG=#2, Stimulation=#0 -> ERP generator => #3
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/scripts/erp_aggregator.py
  Target stimulation label = OVTK_StimulationId_Target
  Non-Target stimulation label = OVTK_StimulationId_NonTarget
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Hamming
  Window method = Hamming
-> Spectral analysis (FFT) => #6
  Spectral components = Amplitude
#6.Amplitude -> Epoch average
  Averaging type = Cumulative average
  Epoch count = 4
-> Channel spectra
  Minimum frequency to display = 0
  Maximum frequency to display = 128
#3 -> Identity => #9
Input signal=#9, Input stimulations=#1 -> Stimulation based epoching "Target epochs" => #10
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
#10.Epoched signal -> Epoch average
  Averaging type = Cumulative average
  Epoch count = 100
-> Signal average => #12
  Clock frequency (Hz) = 60
  Script = ${Player_ScenarioDirectory}/scripts/python-signal-average.py
Data=#12 -> Signal display "Average Signal (Target)"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 1
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#9, Input stimulations=#1 -> Stimulation based epoching "Non-Target epochs" => #14
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
#14.Epoched signal -> Epoch average
  Averaging type = Cumulative average
  Epoch count = 100
-> Signal average => #16
  Clock frequency (Hz) = 60
  Script = ${Player_ScenarioDirectory}/scripts/python-signal-average.py
Data=#16 -> Signal display "Average Signal (Non Target)"
  Display Mode = Scan
  Auto vertical scale = Global
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 1
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#2 -> Temporal filter => #18
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 1
  High cut frequency (Hz) = 40
  Pass band ripple (dB) = 0.5
Data=#18, Stimulations=#0 -> Signal display "Artificial EEG"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
