OpenViBE-Scenario
Comment
  Prototyping with Python and OpenVIBE
  Example 1: Python stimulator
Comment
  Step 1:
  Add Sinus Oscillator, Python scripting and Signal display boxes.

  Step 2:
  Right click Python scripting and modify inputs
  Add one input of type stimulation

  Also add parameters "Target stimulation label"
  and "Non-Target stimulation label" of type Stimulation label
  and "Target probability" of type Float.

  Step 3:
  Connect boxes

  Step 4:
  Run scenario

Target/Non-target stimulator => #0
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/scripts/random_stimulator.py
  Target stimulation label = OVTK_StimulationId_Target
  Non-Target stimulation label = OVTK_StimulationId_NonTarget
  Target probability = 0.25
Sinus oscillator => #1
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32
Data=#1, Stimulations=#0 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0xc67a01dc Python scripting
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/scripts/random_stimulator.py
  Target stimulation label = OVTK_StimulationId_Target
  Non-Target stimulation label = OVTK_StimulationId_NonTarget
  Target probability = 0.25
